PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = slider-test
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Routines
  Routine trial
    RatingScaleComponent rating
      forceEndRoutine = True
      high = 1000
      labels = Very negative,Neutral,Very positive
      low = 0
      marker = circle
      pos = 0, -0.4
      scaleDescription = Description
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
      storeHistory = True
      storeRating = False
      storeRatingTime = False
      tickHeight = 0.0
      visualAnalogScale = True
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Flow
  Routine trial
