PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = slider_test
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $thisTrial['emotion']
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    ImageComponent scale
      image = scale_814x144.png
      pos = (0, -300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    CodeComponent do_slide
      Code Type = Py
      Begin Routine:
        mouse.setVisible(False)
        # mouse.setPos((1,1))
        mouse.getPos()
      Each Frame:
        # something
        width = 0.025
        left_bound = -0.39
        right_bound = 0.39 - width
        oldx, oldy = indicator.pos
        dx, _dy = mouse.getRel()
        newx = oldx + dx
        if newx < left_bound:
            newx = left_bound
        if newx > right_bound:
            newx = right_bound
        indicator.pos = (newx, oldy)
    PolygonComponent indicator
      fillColor = $[1,1,1]
      lineWidth = 4
      nVertices = 100
      ori = 90
      pos = (-0.0125, -0.25)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine iti
    TextComponent getready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Get ready
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  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = press space to start
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    KeyboardComponent instructions_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = emotions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('emotion', 'Grumpy')]),
      OrderedDict([('emotion', 'Sleepy')]),
      OrderedDict([('emotion', 'Happy')]),
      OrderedDict([('emotion', 'Doc')])]
    Routine iti
    Routine trial
  LoopTerminator trials
