PsychoPy2experiment version="3.0.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = video_rater
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Routines
  Routine trial
    TextComponent prompt_text
      letterHeight = 0.06
      pos = (0, -.25)
      startVal [time (s)] = 0.0
      text = How did this person feel while talking?
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    ImageComponent scale
      image = valence_scale_white.png
      pos = (0, -.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      startVal [time (s)] = 0.0
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    CodeComponent trial_code
      Code Type = Py
      Begin Routine:
        mouse.setVisible(False)
        # mouse.setPos((1,1))
        mouse.getPos()

        _oldx, oldy = indicator.pos
        indicator.pos = (0, oldy)
      Each Frame:
        # something
        width = 0.025
        left_bound = -0.385
        right_bound = 0.385
        oldx, oldy = indicator.pos
        dx, _dy = mouse.getRel()
        newx = oldx + dx
        if newx < left_bound:
            newx = left_bound
        if newx > right_bound:
            newx = right_bound
        indicator.pos = (newx, oldy)
    PolygonComponent indicator
      fillColor = $[1,0,.2]
      lineWidth = 4
      nVertices = 100
      ori = 90
      pos = (0, -0.345)
      shape = regular polygon...
      size = (.025, .025)
      startVal [time (s)] = 0.0
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    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $thisTrial['moviefile']
      pos = (0,100)
      startVal [time (s)] = 0.0
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  Routine iti
    TextComponent getready
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent iti_code
      Code Type = Py
      Begin Routine:
        mouse.setVisible(False)
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a series of videos.

        Use the mouse to rate how positive or negative the speaker is feeling at this point in the video.

        Press space to start.
    KeyboardComponent instructions_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent inst_code
      Code Type = Py
      Begin Routine:
        mouse.setVisible(False)
  Routine thanks
    TextComponent thanks_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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    KeyboardComponent thanks_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent thanks_code
      Code Type = Py
      Begin Routine:
        mouse.setVisible(False)
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('moviefile', 'negative-example.mp4')]),
      OrderedDict([('moviefile', 'positive-example.mp4')])]
    Routine iti
    Routine trial
  LoopTerminator trials
  Routine thanks
